ScriptName MapToJPG
#
# SerialEM Script to convert map overview to a jpg image. 
# it works on currently selected map item and should work for "Acquire at points...".
#################################
# Chen Xu <chen.xu@umassmed.edu>
# Created: 2018-04-27
# Updated: 2018-04-27
#################################

# skip non-map item
ReportNavItem
If $RepVal5 != 2        # if not a map item
  Echo -> Not a map item
  Exit
EndIf

# load map into Q unbinned
SetUserSetting BufferToReadInto Q
SetUserSetting LoadMapsUnbinned 1   
LoadNavMap

# make jpg image
ReduceImage Q 2         # assuming loading buffer is Q, and reduce 2 to make JPG image density range more pleasant
SaveToOtherFile A JPG JPG $navNote.jpg
