ScriptName MapsToJPG
#
# SerialEM Script to convert map overview to jpg. 
# it works on currently selected map item and should work for "Acquire at points...".
# Before running this script, one perhaps wants to dial "Bin Overview" in montage control panel to 1. 
##############################
# Created 2018-04-27, Chen Xu
##############################

ReportNavItem
If $RepVal5 != 2        # if not a map item
  Echo -> Not a map item
  Exit
EndIf

LoadNavMap
ReduceImage Q 2         # assuming loading buffer is Q, and reduce 2 to make JPG image density range more pleasant
SaveToOtherFile A JPG JPG $navNote.jpg
