ScriptName MyFuncs
# some functions


####################################
Function CycleTargetDefocus 3 0
## three variables, not string

# define defocus up and down thresholds, and changing step
# set here or by calling Parameters
TD_low = $argVal1
TD_high = $argVal2
step = $argVal3

#Call Parameters

Echo ===> Running CycleTargetDefocus ...
Echo >>>> defined Range and Step (um)  => [ $TD_low, $TD_high ], [ $step ].

## no editing below ##
delta = -1 * $step

# if the current TargetDefocus is outside of range, make it as TD_low.
# Otherwise, increase a step of $delta

SuppressReports
ReportTargetDefocus 
If $reportedValue1 > $TD_low OR $reportedValue1 < $TD_high

   SetTargetDefocus $TD_low
Else 
   IncTargetDefocus $delta
   ChangeFocus $delta
Endif

ReportTargetDefocus 
TargetDefocus = $repVal1
Echo TargetDefocus = $repVal1 um
EndFunction 

################################################
Function CropImageAToBuffer 0 1 
#=============================================
# CallFunction MyFuncs::CropImageAToBuffer T
#=============================================
Echo ===> Running CropImageAToBuffer ...

buffer = $argVal1

#SupressReports

## get info for A and $buffer
ImageProperties $buffer
XP = $reportedValue1
YP = $reportedValue2

ImageProperties A
XA = $reportedValue1
YA = $reportedValue2

Xdiff = $XA - $XP
Ydiff = $YA - $YP

half_Xdiff = $Xdiff / 2
half_Ydiff = $Ydiff / 2

X0 = $half_Xdiff 
X1 = $XP + $half_Xdiff

Y0 = $half_Ydiff 
Y1 = $YP + $half_Ydiff

# crop
CropImage A $X0 $X1 $Y0 $Y1
EndFunction 

################################
Function CropImageAToP 0 0 
Echo ===> Running CropImageAToP ...

#SupressReports

## get info for A and P
ImageProperties P
XP = $reportedValue1
YP = $reportedValue2

ImageProperties A
XA = $reportedValue1
YA = $reportedValue2

Xdiff = $XA - $XP
Ydiff = $YA - $YP

half_Xdiff = $Xdiff / 2
half_Ydiff = $Ydiff / 2

X0 = $half_Xdiff 
X1 = $XP + $half_Xdiff

Y0 = $half_Ydiff 
Y1 = $YP + $half_Ydiff

# crop
CropImage A $X0 $X1 $Y0 $Y1
EndFunction 

####################################################
Function CropImage 1 1
## crop image in A buffer to quarter size
## CallFunction MyFuncs::CropImage A 0.25

buffer = $argVal1
frac = $argVal2

ImageProperties $buffer
X = $repVal1
Y = $repVal2

halfX = $X / 2
halfY = $Y / 2

QX = $X * $frac
QY = $Y * $frac

echo $QX $QY

X0 = $halfX - ( $QX / 2 )
X1 = $halfX + ( $QX / 2 )
Y0 = $halfY - ( $QY / 2 )
Y1 = $halfY + ( $QY / 2 ) - 1

# crop
CropImage $buffer $X0 $X1 $Y0 $Y1
EndFunction

####################################################
Function AlignToBuffer 1 1
#========================================
# CallFunction MyFuncs::AlignToBuffer 2 T
#========================================
# *** Note: Align to buffer T, twice ****
#
# a function to align to an image against buffer $buffer, $iter times.
# it takes shots and even crop it when needed. At the end, 
# the ImageShift = 0. Assume your have an image in buffer $buffer
# 
# update @  2015-12-31 01:22:15

iter = $argVal1
buffer = $argVal2

SuppressReports

## Low Dose
ReportLowDose 
If $reportedValue1 == 1
    ImageLowDoseSet $buffer
    S = $reportedValue1
Elseif $reportedValue1 == 0
    ImageProperties $buffer
    S = $reportedValue6
Endif

## get image parameters in buffer $buffer
ImageProperties $buffer
XP = $reportedValue1
YP = $reportedValue2
bin = $reportedValue3
E = $reportedValue4
# PixelSize = $reportedValue5
#S = $reportedValue6

# figure out from which set the image was taken
#(0=view, 1=focus, 2=trial, 3=record, 4=preview)#
If $S == 0
    shot = View
Elseif $S == 1
    shot = Focus
Elseif $S == 2 OR $S == 5
    shot = Trial
Elseif $S == 3
    shot = Record
Elseif $S == 4
    shot = Preview
Elseif $S == 5
    shot = Search
Endif

## set camera parameters
SetExposure $S $E
SetCenteredSize $S $bin $XP $YP

## align
Loop $iter ind
    $shot
    # Need crop, for Camera like Eagle or Falcon?
    ImageProperties A
    XA = $reportedValue1
    YA = $reportedValue2
    If $XA > $XP OR $YA > $YP
        echo CallFunction  MyFuncc::CropImageAToBuffer $buffer
        CallFunction  MyFuncs::CropImageAToBuffer $buffer
    Endif
    AlignTo $buffer
    if $ind == $iter
       ResetImageShift 2 0.05
       echo Relaxing stage 50nm ...
    else 
       ResetImageShift 
    endif
EndLoop 

## reset camera
RestoreCameraSet
EndFunction 


####################################################
Function AlignToP 1 0
# align round  
# a function to align to an image against buffer P, $iter times.
# it takes shots and even crop it when needed. At the end, 
# the ImageShift = 0.
# SEM 3-5 beta built 10/10/2014
# update @  2014-11-18 02:09:34

iter = $argVal1

SuppressReports

## Low Dose
ReportLowDose 
If $reportedValue1 == 1
    ImageLowDoseSet P
    S = $reportedValue1
Elseif $reportedValue1 == 0
    ImageProperties P
    S = $reportedValue6
Endif

## get image parameters in buffer P
ImageProperties P
XP = $reportedValue1
YP = $reportedValue2
bin = $reportedValue3
E = $reportedValue4
# PixelSize = $reportedValue5
#S = $reportedValue6

# figure out from which set the image was taken
#(0=view, 1=focus, 2=trial, 3=record, 4=preview)#
If $S == 0
    shot = View
Elseif $S == 1
    shot = Focus
Elseif $S == 2 OR $S == 5
    shot = Trial
Elseif $S == 3
    shot = Record
Elseif $S == 4
    shot = Preview
Endif

## set camera parameters
SetExposure $S $E
SetCenteredSize $S $bin $XP $YP

## align
Loop $iter
    $shot
    # Need crop, for Camera like Eagle or Falcon?
    ImageProperties A
    XA = $reportedValue1
    YA = $reportedValue2
    If $XA > $XP OR $YA > $YP
        echo CallFunction  MyFuncc::CropImageAToP
        CallFunction  MyFuncs::CropImageAToP
    Endif
    AlignTo P
    ResetImageShift 
EndLoop 

## reset camera
RestoreCameraSet
EndFunction 

######################################################
Function ZeroIS-quick 2 0
# two arguments are -  shift threshold and dead shift (too large)

# 2014-10-21 12:05:23

Echo ===> Running ZeroIS-quick ...

limit = $argVal1
dead = $argVal2

#- no editing below -#

# IS from Realign routine
ReportImageShift
X = $reportedValue1
Y = $reportedValue2
IS = sqrt $X * $X + $Y * $Y

If $IS <= $limit
    ClearAlignment
    echo IS ($IS) <= limit ($limit) um
    echo Clearalignment
Elseif $IS > $limit AND $IS <= $dead
    echo IS ($IS) > limit ($limit) um
    echo Resetimageshift
    ResetImageShift
Else 
    Echo IS ($IS) > $dead um, skip this point!
Endif
EndFunction 

###################################################
Function Drift 1 0 
# A function to measure drift rate, if good, skip to the end of loop. 
# Otherwise, exit execution -- i.e. skip the point. 

Echo ===> Running Drift $argVal1(A)...

#=============
# parameters 
#=============
## drift rate threshold
crit = $argVal1
# set these above from centralized macro - Parameters 
shot = F
interval = 4
times = 10

period = $interval + 1
#SuppressReports
#ResetClock 

$shot
Delay $interval
Loop $times index
$shot
AlignTo B
ReportAlignShift
ClearAlignment
dx = $reportedValue3
dy = $reportedValue4
dist = sqrt $dx * $dx + $dy * $dy
rate = $dist / $period * 10	
#ReportClock
echo Rate = $rate A/sec
echo ----------------

If $rate < $crit
    echo Drift is low enough after shot $index      
    break
Elseif  $index < $times
    Delay $interval
Else
    echo Drift never got below $crit: Skipping ...
    exit   
Endif
EndLoop
EndFunction

######################################################
Function CalEucentricFocus 0 0
# macro to calibrate EucentriFocus using F 
# update @ 2014-10-22 07:55:56

Echo ===> Running CalEucFocus ...
Echo *** Assuming specimen is already at Eucentricitt ***

# use SEM built-in wobbling way to get to Eucentricity
#Eucentricity 3

## record original TargetDefocus
ReportTargetDefocus 
orig = $reportedValue1

## make sure TargetDefocus is at 0
SetTargetDefocus 0

## bring Objective to eucentric
## not to normalize because beam will be 
## drifting afterwards.

#NormalizeLenses 2
#Delay 1
Loop 3
	G
EndLoop

## Cal - record the value in memory, unless in admin mode
## and save it to calibration file.
CalEucentricFocus

## restore original target defocus
SetTargetDefocus $orig
EndFunction

####################################################################
Function CalEucentricFocus_View 0 0
# macro to quickly calbrate EucentricFocus value using View in LD. 
# update @ 2014-10-21 12:28:58

Echo ===> Running CalEucFocus_View ...
Echo *** Assuming specimen is already at Eucentricity ***

# use SEM built-in wobbling way to get to Eucentricity
#Eucentricity 3

## record original TargetDefocus
ReportTargetDefocus 
orig = $reportedValue1

## make sure TargetDefocus is at 0
SetTargetDefocus 0

## take care of LD offset
GoToLowDoseArea V
SaveFocus 
SetStandardFocus 0

## Bring objective to Eucentric Focus. Not use normalize
## because it caused beam to shift (not stable) 
#NormalizeLenses 2
#Delay 1
Loop 3
# use View in LD
	G 1 1
EndLoop
CalEucentricFocus

## Restore Focus
RestoreFocus 

## restore original target defocus
SetTargetDefocus $orig
EndFunction

###############################################################
Function Z_byG 0 0
#
# a function to adjust the eccentric center using beam tilted pairs.
# It uses Autofocus to measure the focus and adjust Z instead.
#

Echo ===> Running Z_byG ...

# If in Low Dose, the area should be at Focus first
# before defocus is zeroed, because it could come from V with 
# large defocus offset. It could float up in that case. 

SuppressReports
ReportLowDose
# if in LowDose and area is V
If $reportedValue1 == 1 AND $reportedValue2 == 0
  GoToLowDoseArea F
Endif 

#==================
# set objective lens 
#==================
SetEucentricFocus
#NormalizeLenses 2
#Delay 1

#===========
# Adjust Z
#===========
Loop 2
#MoveStage 0 0 2
#MoveStage 0 0 -1
Autofocus -1
ReportAutofocus 
t = -1 * $reportedValue1
MoveStage 0 0 $t
echo --> Z moved $reportedValue1 micron 
EndLoop
EndFunction

#########################################################
Function Z_byV 0 0

Echo ===> Running Z_byV ...
#====================================
# for defocus offset of V in Low Dose, save it
# ===================================
GoToLowDoseArea V
SaveFocus

#==================
# set object lens 
#==================
SetEucentricFocus

ReportAutofocusOffset 
GOffset = $repVal1
SetAutofocusOffset  -10
#NormalizeLenses 2
#Delay 1

#===========
# Adjust Z
#===========
Loop 2
Autofocus -1 1
ReportAutofocus 
Z = -1 * $reportedValue1
MoveStage 0 0 $Z
echo Z has moved --> $Z micron 
EndLoop

#=========================================
# restore the defocus set in V originally
# ========================================
RestoreFocus
SetAutofocusOffset $GOffset
EndFunction

#######################################################
Function DistanceFromLastItem 0 0 
# a function to return distance how far stage moved from last A point

ReportNavItem 
If $navAcqIndex == 1
   echo -> This is the first Acq Item
   DIS = 0
Else
   X_curr = $repVal2
   Y_curr = $repVal3
   DIS = SQRT (($X_curr - $X ) * ($X_curr - $X) + ($Y_curr - $Y) * ($Y_curr - $Y)) 
Endif 
echo => variable DIS has value $DIS

#clear for this round, carry over to next item
ClearPersistentVars 
X := $X_curr
Y := $Y_curr

EndFunction 

###########################################################
Function ToggleScreen 0 0
ReportScreen 

If $repVal1 = 0
   ScreenDown
Else
   ScreenUp
Endif
EndFunction 

############################################################ 
Function RecordWithIS 2 0 radius number
# take shots using Image Shift after hole is centered
# for 2 um hole, maybe radius should use 0.75 when call this function like
# beam size set as 1um, take 6 shot around hole edge
#
# CallFunction MyFuncs::RecordWithIS 0.75 6
#

ang_base = 360 / $number
Loop $number index
ang = ( $index - 1 ) * $ang_base
X = $radius * SIN $ang
Y = $radius * COS $ang

# now take shot
ImageShiftByMicrons $X $Y
Record
SetImageShift 0 0
EndLoop
EndFunction 

###############################################################
Function LMMCars 0 0 

Loop $#cat index
LoadCartridge $cat[$index]
SetNavRegistration $cat[$index]
SetColumnOrGunValve 1
MoveStageTo 0 0 
OpenNewMontage 0 0 $name[$index]-LMM-Car$cat[$index].st
Montage
NewMap
CloseFile
EndLoop 

EndFunction 

##############################################
Function Z_byV2 2 0 iter offset 
Echo ===> Running Z_byV2 ...
#====================================
# for defocus offset of V in Low Dose, save it
# ===================================
GoToLowDoseArea V
SaveFocus

#==================
# set object lens 
#==================
SetEucentricFocus
ChangeFocus $offset                         

#===========
# Adjust Z
#===========
Loop $iter
Autofocus -1 2
ReportAutofocus 
# Z = -1 * $reportedValue1
Z = -0.74 * $reportedValue1 	# -200um V vs R offset, 0.74 is a good damper
#If ABS ($Z) > 180
 #  echo Something is wrong, fix manually before continuing ...
  # exit
#Endif 
MoveStage 0 0 $Z
echo Z has moved --> $Z micron 
EndLoop

#=========================================
# restore the defocus set in V originally
# ========================================
RestoreFocus
EndFunction

##################################################
Function MapToJPG 0 0
# 
# SerialEM Script to convert map overview to a jpg image. 
# it works on currently selected map item and should work for "Acquire at points...".
# 
#################################
# Chen Xu <chen.xu@umassmed.edu>
# Created: 2018-04-27
# Updated: 2018-04-27
#################################

# skip non-map item
ReportNavItem
If $RepVal5 != 2        # if not a map item
  Echo -> Not a map item
  Exit
EndIf

# load map overview into Q unbinned
SetUserSetting BufferToReadInto 16	# Q is 16th in alphabet, if A is 0.
SetUserSetting LoadMapsUnbinned 1   
LoadNavMap

# make a jpeg image
ReduceImage Q 2         # assuming loading buffer is Q, and reduce 2 to make JPG image density range more pleasant
SaveToOtherFile A JPG JPG $navLabel_$navNote.jpg
EndFunction

###################################################################
Function NewMapToJPG 0 0
# 
# SerialEM Script to convert last item - map overview to a jpg image. 
# It uses Note string as part of jpg filename.
# it works on an item which creates a map and should work for "Acquire at points..."
# as "Run Script after". 
# 
# Chen Xu <chen.xu@umassmed.edu>
# Created: 2018-04-27
# Updated: 2018-04-30
#

# skip non-map item
ReportOtherItem -1
If $RepVal5 != 2        # if not a map item
  Echo -> Not a map item, exit ...
  Exit
EndIf

# load map overview into Q unbinned
SetUserSetting BufferToReadInto 16	# Q is 16th in alphabet, if A is 0.
SetUserSetting LoadMapsUnbinned 1   
LoadOtherMap -1				# last item on the nav list

# make a jpeg image
ReduceImage Q 2         # assuming loading buffer is Q, and reduce 2 to make JPG image density range more pleasant
SaveToOtherFile A JPG JPG $navLabel_$navNote.jpg
EndFunction


##################################################
Function AToJPG 0 0
# 
# SerialEM Script to convert save image in buffer A to a jpg image. 
# it reduces image in A by 2 for comfortable JPG density range. It 
# takes current filename and Z into jpg filename
# 
#################################
# Chen Xu <chen.xu@umassmed.edu>
# Created: 2018-04-29
# Updated: 2018-04-29
#################################
ReportCurrentFilename 1
root = $RepVal1 
ext = $RepVal2
ReportFileZsize
z = $RepVal1

#ReduceImage A 1
SaveToOtherFile A JPG JPG $root-$z.jpg

EndFunction 

####################################################
Function BufferShot 0 1 buffer 
# Take a shot using the same imaging condition in a buffer
SuppressReports

## Low Dose
ReportLowDose 
If $reportedValue1 == 1
    ImageLowDoseSet $buffer
    S = $reportedValue1
Elseif $reportedValue1 == 0
    ImageProperties $buffer
    S = $reportedValue6
Endif

## get image parameters in buffer $buffer
ImageProperties $buffer
XP = $reportedValue1
YP = $reportedValue2
bin = $reportedValue3
E = $reportedValue4
# PixelSize = $reportedValue5
#S = $reportedValue6

# figure out from which set the image was taken
#(0=view, 1=focus, 2=trial, 3=record, 4=preview)#
If $S == 0
    shot = View
Elseif $S == 1
    shot = Focus
Elseif $S == 2 
    shot = Trial
Elseif $S == 3
    shot = Record
Elseif $S == 4
    shot = Preview
Elseif $S == 5 
    shot = Search
Endif

## set camera parameters
SetExposure $S $E
SetCenteredSize $S $bin $XP $YP


$shot
# still need crop, for Camera which doesn't do flexible sub-size like FEI cameras
ImageProperties A
XA = $repVal1
YA = $repVal2
If $XA > $XP OR $YA > $YP
	echo CallFunction  MyFuncs::CropImageAToBuffer $buffer
	CallFunction MyFuncs::CropImageAToBuffer $buffer
Endif

## reset camera
RestoreCameraSet
EndFunction

######################################################
Function Relax 0 0 
# function to relax stage for $dis distance

## relax
# report shift in buffer A from last round of Align
# move stage 0.025um in opposite directions
ReportAlignShift
shiftX = $repVal5
shiftY = $repVal6

# just in case it got a blank image so no shift found
# or the shift found is too small, skip this
If ABS ( $shiftX ) < 25
   signX = 0
Else
   signX = $shiftX / ABS ( $shiftX )
Endif 

If ABS ( $shiftY ) < 25
   signY = 0
Else 
   signY = $shiftY / ABS ( $shiftY )
Endif 

moveX = -1 * $signX * 0.025
moveY = -1 * $signY * 0.025
echo MoveStage $moveX $moveY microns ...
MoveStage $moveX $moveY
EndFunction 

######################################################
Function CtfFindFocus 0 0
# using CtfFind to do autofocusing, assume image in A buffer

# get target focus and RefocusThresold on current setting
ReportUserSetting TargetDefocus TargetDefocus
ReportUserSetting RefocusThreshold RefocusThreshold

dmin = $TargetDefocus + 2.
if $dmin > 0
dmin = 0
endif
dmax = $TargetDefocus - 2.
 
#F
#CtfFind buf dmin dmax [fast] [box] [phmin] [phmax] [phstep] [afix]
CtfFind A $dmin $dmax 1 

def = $repVal1
stig = $repVal2

delta =  $TargetDefocus  - $def 		#need test sign
df = $delta * 1.30

#ReportDefocus 
ChangeFocus $df
#ReportDefocus 
echo 
EndFunction

###############################################################
Function AmongList? 1 0 nP

#list = { 1 4 5 9 }
#echo  $#list

n = $nP


Loop $#list ind
if $n == $list[$ind]
 last = $ind
  break
else
   last = $ind
Endif
EndLoop

If $last <  $#list  OR $n ==  $list[$#list] 
   #echo Among
   RepVal1 = 1
Else
  # echo Not among
   RepVal1 = 0
Endif

EndFunction

#####################################################
Function C2_150-OBJ_out 0 0
# requires AutoIT-Talos.txt running on Talos 
SetupScopeMessage 0 0 C2_150-OBJ_out
ShowMessageOnScope SEM
EndFunction

#####################################################
Function C2_70-OBJ_100 0 0 
# requires AutoIT-Talos.txt running on Talos
SetupScopeMessage 0 0 C2_70-OBJ_100
ShowMessageOnScope SEM
EndFunction

#####################################################
Function C2_50-OBJ_100 0 0 
# requires AutoIT-Talos.txt running on Talos
SetupScopeMessage 0 0 C2_50-OBJ_100
ShowMessageOnScope SEM
EndFunction

#####################################################
Function C2_30-OBJ_100 0 0 
# requires AutoIT-Talos.txt running on Talos
SetupScopeMessage 0 0 C2_30-OBJ_100
ShowMessageOnScope SEM
EndFunction

#####################################################
Function C2_70-OBJ_70 0 0 
SetupScopeMessage 0 0 C2_70-OBJ_70
ShowMessageOnScope SEM
EndFunction

#####################################################
Function C2_50-OBJ_70 0 0 
SetupScopeMessage 0 0 C2_50-OBJ_70
ShowMessageOnScope SEM
EndFunction

#####################################################
Function C2_30-OBJ_70 0 0 
# requires AutoIT-Talos.txt running on Talos
SetupScopeMessage 0 0 C2_30-OBJ_70
ShowMessageOnScope SEM
EndFunction

#####################################################
Function K2-shutter 0 0 
# requires AutoIT-Talos.txt running on Talos
SetupScopeMessage 0 0 K2-shutter
ShowMessageOnScope SEM
EndFunction

#####################################################
Function Turbo_ON 0 0 
# requires AutoIT-Talos.txt running on Talos
SetupScopeMessage 0 0 Turbo_ON
ShowMessageOnScope SEM
EndFunction

#####################################################
Function Turbo_OFF 0 0 
# requires AutoIT-Talos.txt running on Talos
SetupScopeMessage 0 0 Turbo_OFF
ShowMessageOnScope SEM
EndFunction

################### AutoScreen ########################
Function ScreenMesh 11 1

cur_grid_reg = $argVal1
mesh_index = $argVal2
mesh_label = $argVal3
xShift = $argVal4
yShift = $argVal5
MAP_X_PIECES = $argVal6
MAP_Y_PIECES = $argVal7
NUM_HOLES = $argVal8
def = $argVal9
z_tune_iter = $argVal10
z_tune_offset = $argVal11
map_name = $argVal12

/*
echo $argVal1
echo $argVal2
echo $argVal3
echo $argVal4
echo $argVal5
echo $argVal6
echo $argVal7
echo $argVal8
echo $argVal9
echo $argVal10
echo $argVal11
echo $argVal12
echo passed in
*/

echo $map_name

## main scope action

SetProperty RealignItemMaxLMfield 700
echo ----> take out OBJ aperture. 
CallFunction MyFuncs::C2_150-OBJ_out
         
SetColumnOrGunValve 1
Echo MoveToNavItem $mesh_index
MoveToNavItem $mesh_index
echo ----> RealignToOtherItem $mesh_index 0
RealignToOtherItem $mesh_index 0
ResetImageShift 
Copy A P
Search 
AlignTo P
ResetImageShift 
echo ----> MoveStage $xShift $yShift
MoveStage $xShift $yShift
SetProperty RealignItemMaxLMfield 5

# V, fix Z 
echo => Fix Z ...
GoToLowDoseArea V
echo ----> C2 30 & Obj 70 ...
CallFunction MyFuncs::C2_30-OBJ_70
Delay 5
V
Copy A T
# z_tune_iter and z_tune_offset are persistent variables defined in Script Z
SetCameraArea V H
echo For -200um V offset = $z_tune_offset ...
Echo CallFunction MyFuncs::Z_byV2  $z_tune_iter $z_tune_offset
CallFunction MyFuncs::Z_byV2  $z_tune_iter $z_tune_offset
RestoreCameraSet

UpdateItemZ 
V
AlignTo T

# MMM. No need for pre-setup template
echo => Make MMM map ...
SetUserSetting MontageUseViewInLD 1
SetUserSetting  MontageAlignPieces 1
SetUserSetting MontageVerySloppy 0
AllowFileOverwrite 1

Echo OpenNewMontage $MAP_X_PIECES $MAP_Y_PIECES $map_name
OpenNewMontage $MAP_X_PIECES $MAP_Y_PIECES $map_name
SetMontageParams 1 576 410 5760 4092 1 1
echo ----> Acquire MMM map ...
Montage 
NewMap 
CallFunction MyFuncs::NewMapToJPG
CloseFile

# Add holes and run a loop to take shots
ReportOtherItem -1
holes_index_start = $repVal1 + 1
CallFunction MyFuncs::houghCircles_index $repVal1 $NUM_HOLES
SetNavRegistration $cur_grid_reg
ReportOtherItem -1
holes_index_end = $repVal1 
n = $holes_index_end - $holes_index_start + 1
         
AutoCenterBeam
CallFunction MyFucs::WaitForRefilling 
         
AllowFileOverwrite 1
OpenNewFile R_mesh$mesh_label.st
Loop $n ind
   hole_index = $ind - 1 + $holes_index_start 
   RealignToOtherItem $hole_index 0
   ReportOtherItem $hole_index
   hole_label = $navLabel
   echo Acquiring at Item $hole_index, Label $hole_label
   # CenterBeam & autofocus
   echo => CenterBeam & Focus...
   AutoCenterBeam 
   SetTargetDefocus $def
   G
   R
   S
EndLoop
CloseFile

## end of scope actions

EndFunction

################### AutoScreen ########################
Function AutoMMM 11 1
# Function to do LMM and MMM maps from the mesh points picked on LMMs. 

cur_grid_reg = $argVal1
mesh_index = $argVal2
mesh_label = $argVal3
xShift = $argVal4
yShift = $argVal5
MAP_X_PIECES = $argVal6
MAP_Y_PIECES = $argVal7
NUM_HOLES = $argVal8
def = $argVal9
z_tune_iter = $argVal10
z_tune_offset = $argVal11
map_name = $argVal12

## main scope action

SetProperty RealignItemMaxLMfield 700
echo ----> take out OBJ aperture. 
CallFunction MyFuncs::C2_150-OBJ_out
         
SetColumnOrGunValve 1
Echo MoveToNavItem $mesh_index
MoveToNavItem $mesh_index
echo ----> RealignToOtherItem $mesh_index 0
RealignToOtherItem $mesh_index 0
ResetImageShift 
Copy A P
Search 
AlignTo P
ResetImageShift 
echo ----> MoveStage $xShift $yShift
MoveStage $xShift $yShift
SetProperty RealignItemMaxLMfield 5

# V, fix Z 
echo => Fix Z ...
GoToLowDoseArea V
echo ----> C2 30 & Obj 70 ...
CallFunction MyFuncs::C2_30-OBJ_70
Delay 5
V
Copy A T
# z_tune_iter and z_tune_offset are persistent variables defined in Script Z
CallFunction MyFuncs::Z_byV2 $z_tune_iter $z_tune_offset
UpdateItemZ 
V
AlignTo T

# MMM. No need for pre-setup template
echo => Make MMM map ...
SetUserSetting MontageUseViewInLD 1
SetUserSetting  MontageAlignPieces 1
SetUserSetting MontageVerySloppy 0
AllowFileOverwrite 1

OpenNewMontage $MAP_X_PIECES $MAP_Y_PIECES $map_name
SetMontageParams 1 576 410 5760 4092 1 1        
echo ----> Acquire MMM map ...
Montage 
NewMap 
CallFunction MyFuncs::NewMapToJPG
CloseFile

EndFunction 


######################## semmatch houghCircles_index ###################

Function houghCircles_index 2 0

INDEX = $argVal1
NUM_HOLES = $argVal2

# If something goes wrong, set Debug = 1
Debug = 0             # True = 1 ; False = 0

### semmatch arguments
param2 = 50
maxPts = $NUM_HOLES

acquire = 0                                    # True = 1 ; False = 0
groupOption = 4
    #    0 = no groups
    #    1 = groups based on radius
    #    2 = all points as one group
    #    3 = specify a certain number of groups
    #    4 = specify number of points per group

# names of temporary files used by semmatch
outputNav = semmatch_nav.nav
image = MMM.jpg

ReportIfNavOpen
If $reportedValue1 != 2
   Exit
Else
   SaveNavigator
Endif
ReportNavFile 1
navfile = $reportedValue1$reportedValue2
navdir = $reportedValue3
SetDirectory $navdir

If $acquire != 1 AND $acquire != 0
   Echo acquire should be either 1 or 0
   Exit
Endif

If $Debug == 1
   debugStr = /k
ElseIf $Debug == 0
   debugStr = /c
Else
   Echo Debug should be either 1 or 0
   Exit
Endif

## load and bin MMM map
ReportOtherItem $INDEX
If $RepVal5 != 2        # if not a map item
   Echo Not a map item. Select a Map item from the navigator.
   Exit
Endif
MAP = $navLabel
Echo Map Label: $MAP
SetUserSetting BufferToReadInto 16
SetUserSetting LoadMapsUnbinned 1
# uncheck Montage Controls "Align pieces in overview"
ReportUserSetting MontageAlignPieces alignChecked
If $alignChecked == 1
   SetUserSetting MontageAlignPieces 0
Endif
LoadOtherMap $INDEX

# reduce image if larger than 2000x2000
maxdimLimit = 2000
ImageProperties Q width height
maxdim = $width
If $width < $height
   maxdim = $height
Endif

If $maxdim < $maxdimLimit
   Copy Q A
   reduction = 1
Else
   reduction = $maxdim / $maxdimLimit
   ReduceImage Q $reduction
Endif
Show Q

## make a jpeg image
SaveToOtherFile A JPG JPG $image
Echo saved $image

ReportOtherItem -1
newLabel = $navIntLabel + 1

RunInShell cmd $debugStr " "semmatch" \
"--houghCircles" \
"--param2" "$param2" \
"--maxPts" "$maxPts" \
"--navfile" "$navfile" \
"--reduction" "$reduction" \
"--image" "$image" \
"--mapLabel" "$MAP" \
"--newLabel" "$newLabel" \
"--groupOption" "$groupOption" \
"--output" "$outputNav" \
"--acquire" "$acquire" "

MergeNavFile $outputNav
If $alignChecked == 1
   SetUserSetting MontageAlignPieces 1
Endif
Show Q

EndFunction 

##################################################
Function CrossGridsCenterAlign 0 0 

# function to fix large shift different due to reloading grid by
# 1) realign to MMM map center first at LMM mag only
# 2) disable LMM realign
# 3) realign to MMM map center again at MMM mag
# 4) fix the shift different 

# updated at Feb 9, 2020 xuchen

ReportNavItem 
NavIndexItemDrawnOn 0
map_index = $repVal1
If $map_index == 0 
   echo Nothing to draw on!
Else
   ReportOtherItem $map_index
   If $navColor == 4            # this is done, skip
      Echo Skipping LMM map centering ...
   else 
      Echo Shift map $repVal1 by aligning in LMM first ...
      # realign to LMM mesh only
      ChangeItemColor $map_index 5          # 5 = NRI, it will not align to itself
      SetProperty RealignItemMaxLMfield 700
      CallFunction MyFuncs::C2_150-OBJ_out
      RealignToOtherItem $map_index 1
      ShiftItemsByCurrentDiff 200                    # -> need to test
      # realign it at MMM mag 
      SetProperty RealignItemMaxLMfield 5
      CallFunction MyFuncs::C2_50-OBJ_70
      ChangeItemColor $repVal1 4
      RealignToOtherItem $map_index 1
      ShiftItemsByCurrentDiff 200                    # -> need to test
    endif 
Endif 

EndFunction 


#######################################################
Function WaitForRefilling 0 0 
# a macro to check refilling status. If it is being filled, 
# do Update hardware Background while refilling. It can be used 
# as pre-action macro for Krios and Talos-Arctica

Loop 30
AreDewarsFilling
If $repVal1 == 1
   echo LN2 is Refilling
   #LongOperation Da 5
Else
   RefrigerantLevel 1
   RefrigerantLevel 2
   Break   
Endif 

Delay 1 min
EndLoop

EndFunction
